PsychoPy2experiment version="1.50.04"
Settings
  Monitor = testMonitor
  color = $[0, 0, 0]
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'s_001', 'session':001}
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $thisTrial.letterColor
      text [set every repeat] = $thisTrial.text
      duration = 1.0
      letterHeight = 0.2
      startTime = 0.5
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    KeyboardComponent resp
      storeCorrect = True
      forceEndTrial = True
      correctAns = $thisTrial.corrAns
      storeResponseTime = True
      startTime = 0.5
      allowedKeys = 123
      duration = 1.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startTime = 0
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      text:
        Please press;
        1 for red ink,
        2 for green ink
        3 for blue ink
        (Esc will quit)

        Any key to continue
    KeyboardComponent ready
      forceEndTrial = True
      correctAns = thisTrial.corrAns
      storeResponseTime = False
      startTime = 0
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      text = Thanks!
      duration = 1.0
      letterHeight = 0.2
      startTime = 1.0
      font = arial
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
    trialList = [{u'text': u'red', u'congruent': 1, u'corrAns': 1, u'letterColor': u'red'}, {u'text': u'red', u'congruent': 0, u'corrAns': 2, u'letterColor': u'green'}, {u'text': u'green', u'congruent': 1, u'corrAns': 2, u'letterColor': u'green'}, {u'text': u'green', u'congruent': 0, u'corrAns': 3, u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': 1, u'corrAns': 3, u'letterColor': u'blue'}, {u'text': u'blue', u'congruent': 0, u'corrAns': 1, u'letterColor': u'red'}]
    trialListFile = trialTypes.xlsx
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    Routine trial
  LoopTerminator trials
  Routine thanks
